OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.0.0-beta)
Input Channels

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Reference Channel
  Channel = 24
  Channel Matching Method = Index
-> Temporal filter "8-15 Hz"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 0.5
-> Simple DSP "x²"
  Equation = x*x
-> Signal average
-> Epoch average
  Averaging type = Moving epoch average (Immediate)
  Epoch count = 32
-> 2D Topography
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Gain = 0.02
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
Data=#0.Signal stream, Stimulations=#0.Stimulations, Channel Units=#0.Channel units -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input stream=#0.Signal stream, Stimulations stream=#0.Stimulations -> CSV File Writer
  Filename = C:/Users/s2629763/Desktop/flow-experiment-mromani/recordings/max/record-[$core{date}-$core{time}].csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input Signal=#0.Signal stream, Input Stimulations=#0.Stimulations -> Generic stream writer
  Filename = C:/Users/s2629763/Desktop/flow-experiment-mromani/recordings/max/record-[$core{date}-$core{time}].ov
  Use compression = false
